CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_microtubule")
    Name to assign these images:input_microtubule
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_septin")
    Name to assign these images:input_septin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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enabled:False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
    Select the input image:input_septin
    Name the output image:input_septin_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Select the input image:input_microtubule
    Name the output image:input_microtubule_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:7|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
    Operation:None
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:-0.3
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:input_microtubule_rescaled_contrastEnhanced
    Image or measurement?:Image
    Select the first image:input_microtubule_rescaled
    Multiply the first image by:2
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:input_microtubule_rescaled_contrastEnhanced
    Name the primary objects to be identified:Initial_Segmentation_Microtubule_bridge
    Typical diameter of objects, in pixel units (Min,Max):50,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

SplitOrMergeObjects:[module_num:9|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
    Select the input objects:Initial_Segmentation_Microtubule_bridge
    Name the new objects:Initial_Segmentation_Microtubule_bridge_merged
    Operation:Merge
    Maximum distance within which to merge objects:5
    Merge using a grayscale image?:No
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    Merging method:Distance
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
FilterObjects:[module_num:10|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
    Select the objects to filter:Initial_Segmentation_Microtubule_bridge_merged
    Name the output objects:Initial_Segmentation_Microtubule_bridge_merged_cropped
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Location_Center_X
    Filter using a minimum measurement value?:Yes
    Minimum value:300
    Filter using a maximum measurement value?:Yes
    Maximum value:1100
    Select the measurement to filter by:Location_Center_Y
    Filter using a minimum measurement value?:Yes
    Minimum value:400
    Filter using a maximum measurement value?:Yes
    Maximum value:1600

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:Initial_Segmentation_Microtubule_bridge_merged_cropped
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:12|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
    Select the objects to filter:Initial_Segmentation_Microtubule_bridge_merged_cropped
    Name the output objects:Microtubule_bridge_largest
    Select the filtering mode:Measurements
    Select the filtering method:Maximal
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RemovedObjects_smallBridges
    Select the measurement to filter by:AreaShape_Area
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
MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:Microtubule_bridge_largest, RemovedObjects_smallBridges
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:14|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
    Select the objects to filter:RemovedObjects_smallBridges
    Name the output objects:smaller_bridges_kept
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:smaller_bridges_removed
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:3000
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.94
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:15|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
    Select initial object set:smaller_bridges_kept
    Select object set to combine:Microtubule_bridge_largest
    Select how to handle overlapping objects:Merge
    Name the combined object set:merged_largest_and_small_objects

SplitOrMergeObjects:[module_num:16|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
    Select the input objects:merged_largest_and_small_objects
    Name the new objects:bridges
    Operation:Merge
    Maximum distance within which to merge objects:5
    Merge using a grayscale image?:No
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    Merging method:Distance
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
OverlayObjects:[module_num:17|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
    Input:input_microtubule
    Name the output image:Overlay_bridges
    Objects:bridges
    Opacity:1

Tile:[module_num:18|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
    Select an input image:input_microtubule_rescaled_contrastEnhanced
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:2
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:No
    Select an additional image to tile:Overlay_bridges

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:TiledImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:input_microtubule
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlaidBridges
    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Users\\Amin\\Desktop\\Cyto June2025\\CellProfiler\\Output\\CHMP4B
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:20|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
    Select object sets to measure:bridges
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:21|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
    Select images to measure:input_microtubule, input_septin
    Select objects to measure:bridges

MeasureImageIntensity:[module_num:22|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
    Select images to measure:input_microtubule, input_septin
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureTexture:[module_num:23|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
    Select images to measure:input_microtubule, input_septin
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    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Images
    Texture scale to measure:3

ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\\Users\\Amin\\Desktop\\Cyto June2025\\CellProfiler\\Output\\CHMP4B
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Texture_AngularSecondMoment_input_septin_3_03_256,Image|Texture_AngularSecondMoment_input_septin_3_01_256,Image|Texture_AngularSecondMoment_input_septin_3_00_256,Image|Texture_AngularSecondMoment_input_septin_3_02_256,Image|Texture_AngularSecondMoment_input_microtubule_3_02_256,Image|Texture_AngularSecondMoment_input_microtubule_3_00_256,Image|Texture_AngularSecondMoment_input_microtubule_3_03_256,Image|Texture_AngularSecondMoment_input_microtubule_3_01_256,Image|Texture_InverseDifferenceMoment_input_septin_3_03_256,Image|Texture_InverseDifferenceMoment_input_septin_3_01_256,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CPfeatures_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:bridges
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
